# Generated by Configurator on Mon Apr 21 20:19:46 EDT 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM3,SerialManager,COM3
Device,COM9,SerialManager,COM9
Device,COM7,SerialManager,COM7
Device,Andor,Andor,Andor
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,DHub,DemoCamera,DHub
Device,DObjective,DemoCamera,DObjective
Device,Spectra,LumencorSpectra,Spectra
Device,ZStage,Nikon,ZStage
Device,TIScope,NikonTI,TIScope
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,XYStage,Prior,XYStage
Device,SimpleAutofocus,SimpleAutoFocus,SimpleAutofocus

# Pre-init settings for devices
Property,COM5,AnswerTimeout,5000.0000
Property,COM5,BaudRate,57600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,0
Property,COM3,AnswerTimeout,5000.0000
Property,COM3,BaudRate,9600
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,0
Property,COM9,AnswerTimeout,5000.0000
Property,COM9,BaudRate,9600
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,0
Property,COM7,AnswerTimeout,5000.0000
Property,COM7,BaudRate,57600
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,0
Property,Andor,Camera,| iXon | DU8201_BV | 2960 |
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM5
Property,Spectra,Port,COM9
Property,Spectra,SetLE_Type,Sola
Property,ZStage,Port,COM3
Property,XYStage,Port,COM7

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino-Shutter,Arduino-Hub
Parent,DObjective,DHub
Parent,TIFilterBlock1,TIScope

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TIFilterBlock1,250.0
Delay,XYStage,250.0

# Roles
Property,Core,Camera,Andor
Property,Core,Shutter,Arduino-Shutter
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Arduino-Switch
Label,Arduino-Switch,63,63
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,12
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,8
Label,Arduino-Switch,7,7
Label,Arduino-Switch,6,6
Label,Arduino-Switch,5,5
Label,Arduino-Switch,4,4
Label,Arduino-Switch,3,3
Label,Arduino-Switch,2,2
Label,Arduino-Switch,1,1
Label,Arduino-Switch,0,0
# DObjective
Label,DObjective,5,Objective-F
Label,DObjective,4,Objective-E
Label,DObjective,3,150X
Label,DObjective,2,100X
Label,DObjective,1,15X
Label,DObjective,0,10X
# TIFilterBlock1
Label,TIFilterBlock1,5,6------
Label,TIFilterBlock1,4,5-UV-1A-
Label,TIFilterBlock1,3,4-TxRhq
Label,TIFilterBlock1,2,3-YFPHQ
Label,TIFilterBlock1,1,2-CFPHQ
Label,TIFilterBlock1,0,1------

# Configuration presets
# Group: Gain
# Preset: NewPreset
ConfigGroup,Gain,NewPreset,Andor,Gain,4


# Group: Channel
# Preset: YFP_10X
ConfigGroup,Channel,YFP_10X,Andor,Binning,1
ConfigGroup,Channel,YFP_10X,Andor,Exposure,50.0000
ConfigGroup,Channel,YFP_10X,Andor,FrameTransfer,Off
ConfigGroup,Channel,YFP_10X,Andor,Gain,4
ConfigGroup,Channel,YFP_10X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,YFP_10X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,YFP_10X,Spectra,State,1
ConfigGroup,Channel,YFP_10X,Spectra,White_Enable,1
ConfigGroup,Channel,YFP_10X,Spectra,White_Level,100
ConfigGroup,Channel,YFP_10X,TIFilterBlock1,Label,3-YFPHQ
ConfigGroup,Channel,YFP_10X,DObjective,Label,10X
ConfigGroup,Channel,YFP_10X,DObjective,State,0
ConfigGroup,Channel,YFP_10X,Core,AutoShutter,1
ConfigGroup,Channel,YFP_10X,Core,Shutter,Spectra

# Preset: YFP_1mM
ConfigGroup,Channel,YFP_1mM,Andor,Binning,1
ConfigGroup,Channel,YFP_1mM,Andor,Exposure,70
ConfigGroup,Channel,YFP_1mM,Andor,FrameTransfer,Off
ConfigGroup,Channel,YFP_1mM,Andor,Gain,110
ConfigGroup,Channel,YFP_1mM,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,YFP_1mM,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,YFP_1mM,Spectra,State,1
ConfigGroup,Channel,YFP_1mM,Spectra,White_Enable,1
ConfigGroup,Channel,YFP_1mM,Spectra,White_Level,100
ConfigGroup,Channel,YFP_1mM,TIFilterBlock1,Label,3-YFPHQ
ConfigGroup,Channel,YFP_1mM,DObjective,Label,10X
ConfigGroup,Channel,YFP_1mM,DObjective,State,0
ConfigGroup,Channel,YFP_1mM,Core,AutoShutter,1
ConfigGroup,Channel,YFP_1mM,Core,Shutter,Spectra

# Preset: CFP_10X
ConfigGroup,Channel,CFP_10X,Andor,Binning,1
ConfigGroup,Channel,CFP_10X,Andor,Exposure,50.0000
ConfigGroup,Channel,CFP_10X,Andor,FrameTransfer,Off
ConfigGroup,Channel,CFP_10X,Andor,Gain,4
ConfigGroup,Channel,CFP_10X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,CFP_10X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,CFP_10X,DObjective,Label,10X
ConfigGroup,Channel,CFP_10X,DObjective,State,0
ConfigGroup,Channel,CFP_10X,Spectra,State,0
ConfigGroup,Channel,CFP_10X,Spectra,White_Enable,1
ConfigGroup,Channel,CFP_10X,Spectra,White_Level,100
ConfigGroup,Channel,CFP_10X,TIFilterBlock1,Label,2-CFPHQ
ConfigGroup,Channel,CFP_10X,Core,AutoShutter,1
ConfigGroup,Channel,CFP_10X,Core,Shutter,Spectra

# Preset: RFP_10X
ConfigGroup,Channel,RFP_10X,Andor,Binning,1
ConfigGroup,Channel,RFP_10X,Andor,Exposure,50.0000
ConfigGroup,Channel,RFP_10X,Andor,FrameTransfer,Off
ConfigGroup,Channel,RFP_10X,Andor,Gain,4
ConfigGroup,Channel,RFP_10X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,RFP_10X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,RFP_10X,DObjective,Label,10X
ConfigGroup,Channel,RFP_10X,DObjective,State,0
ConfigGroup,Channel,RFP_10X,Spectra,State,0
ConfigGroup,Channel,RFP_10X,Spectra,White_Enable,1
ConfigGroup,Channel,RFP_10X,Spectra,White_Level,100
ConfigGroup,Channel,RFP_10X,TIFilterBlock1,Label,4-TxRhq
ConfigGroup,Channel,RFP_10X,Core,AutoShutter,1
ConfigGroup,Channel,RFP_10X,Core,Shutter,Spectra

# Preset: UV_15X
ConfigGroup,Channel,UV_15X,Andor,Binning,1
ConfigGroup,Channel,UV_15X,Andor,Exposure,50.0000
ConfigGroup,Channel,UV_15X,Andor,FrameTransfer,Off
ConfigGroup,Channel,UV_15X,Andor,Gain,4
ConfigGroup,Channel,UV_15X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,UV_15X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,UV_15X,DObjective,Label,15X
ConfigGroup,Channel,UV_15X,DObjective,State,0
ConfigGroup,Channel,UV_15X,Spectra,State,0
ConfigGroup,Channel,UV_15X,Spectra,White_Enable,1
ConfigGroup,Channel,UV_15X,Spectra,White_Level,100
ConfigGroup,Channel,UV_15X,TIFilterBlock1,Label,5-UV-1A-
ConfigGroup,Channel,UV_15X,Core,AutoShutter,1
ConfigGroup,Channel,UV_15X,Core,Shutter,Spectra

# Preset: YFP_15X
ConfigGroup,Channel,YFP_15X,Andor,Binning,1
ConfigGroup,Channel,YFP_15X,Andor,Exposure,50.0000
ConfigGroup,Channel,YFP_15X,Andor,FrameTransfer,Off
ConfigGroup,Channel,YFP_15X,Andor,Gain,4
ConfigGroup,Channel,YFP_15X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,YFP_15X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,YFP_15X,Spectra,State,1
ConfigGroup,Channel,YFP_15X,Spectra,White_Enable,1
ConfigGroup,Channel,YFP_15X,Spectra,White_Level,100
ConfigGroup,Channel,YFP_15X,TIFilterBlock1,Label,3-YFPHQ
ConfigGroup,Channel,YFP_15X,DObjective,Label,15X
ConfigGroup,Channel,YFP_15X,DObjective,State,0
ConfigGroup,Channel,YFP_15X,Core,AutoShutter,1
ConfigGroup,Channel,YFP_15X,Core,Shutter,Spectra

# Preset: Phase_10X
ConfigGroup,Channel,Phase_10X,Andor,Binning,1
ConfigGroup,Channel,Phase_10X,Andor,Exposure,50.0000
ConfigGroup,Channel,Phase_10X,Andor,Gain,4
ConfigGroup,Channel,Phase_10X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,Phase_10X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Phase_10X,Spectra,State,0
ConfigGroup,Channel,Phase_10X,TIFilterBlock1,Label,1------
ConfigGroup,Channel,Phase_10X,Andor,FrameTransfer,Off
ConfigGroup,Channel,Phase_10X,Spectra,White_Enable,0
ConfigGroup,Channel,Phase_10X,Spectra,White_Level,0
ConfigGroup,Channel,Phase_10X,DObjective,Label,10X
ConfigGroup,Channel,Phase_10X,DObjective,State,0
ConfigGroup,Channel,Phase_10X,Core,AutoShutter,1
ConfigGroup,Channel,Phase_10X,Core,Shutter,Arduino-Shutter

# Preset: CFP_15X
ConfigGroup,Channel,CFP_15X,Andor,Binning,1
ConfigGroup,Channel,CFP_15X,Andor,Exposure,50.0000
ConfigGroup,Channel,CFP_15X,Andor,FrameTransfer,Off
ConfigGroup,Channel,CFP_15X,Andor,Gain,4
ConfigGroup,Channel,CFP_15X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,CFP_15X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,CFP_15X,DObjective,Label,15X
ConfigGroup,Channel,CFP_15X,DObjective,State,0
ConfigGroup,Channel,CFP_15X,Spectra,State,0
ConfigGroup,Channel,CFP_15X,Spectra,White_Enable,1
ConfigGroup,Channel,CFP_15X,Spectra,White_Level,100
ConfigGroup,Channel,CFP_15X,TIFilterBlock1,Label,2-CFPHQ
ConfigGroup,Channel,CFP_15X,Core,AutoShutter,1
ConfigGroup,Channel,CFP_15X,Core,Shutter,Spectra

# Preset: RFP_15X
ConfigGroup,Channel,RFP_15X,Andor,Binning,1
ConfigGroup,Channel,RFP_15X,Andor,Exposure,50.0000
ConfigGroup,Channel,RFP_15X,Andor,FrameTransfer,Off
ConfigGroup,Channel,RFP_15X,Andor,Gain,4
ConfigGroup,Channel,RFP_15X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,RFP_15X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,RFP_15X,DObjective,Label,15X
ConfigGroup,Channel,RFP_15X,DObjective,State,0
ConfigGroup,Channel,RFP_15X,Spectra,State,0
ConfigGroup,Channel,RFP_15X,Spectra,White_Enable,1
ConfigGroup,Channel,RFP_15X,Spectra,White_Level,100
ConfigGroup,Channel,RFP_15X,TIFilterBlock1,Label,4-TxRhq
ConfigGroup,Channel,RFP_15X,Core,AutoShutter,1
ConfigGroup,Channel,RFP_15X,Core,Shutter,Spectra

# Preset: Phase_UV_10X
ConfigGroup,Channel,Phase_UV_10X,Andor,Binning,1
ConfigGroup,Channel,Phase_UV_10X,Andor,Exposure,50.0000
ConfigGroup,Channel,Phase_UV_10X,Andor,FrameTransfer,Off
ConfigGroup,Channel,Phase_UV_10X,Andor,Gain,4
ConfigGroup,Channel,Phase_UV_10X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,Phase_UV_10X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Phase_UV_10X,DObjective,Label,10X
ConfigGroup,Channel,Phase_UV_10X,DObjective,State,0
ConfigGroup,Channel,Phase_UV_10X,Spectra,State,0
ConfigGroup,Channel,Phase_UV_10X,Spectra,White_Enable,0
ConfigGroup,Channel,Phase_UV_10X,Spectra,White_Level,0
ConfigGroup,Channel,Phase_UV_10X,TIFilterBlock1,Label,5-UV-1A-
ConfigGroup,Channel,Phase_UV_10X,Core,AutoShutter,1
ConfigGroup,Channel,Phase_UV_10X,Core,Shutter,Arduino-Shutter

# Preset: Phase_15X
ConfigGroup,Channel,Phase_15X,Andor,Binning,1
ConfigGroup,Channel,Phase_15X,Andor,Exposure,50.0000
ConfigGroup,Channel,Phase_15X,Andor,Gain,4
ConfigGroup,Channel,Phase_15X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,Phase_15X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Phase_15X,Spectra,State,0
ConfigGroup,Channel,Phase_15X,TIFilterBlock1,Label,1------
ConfigGroup,Channel,Phase_15X,Andor,FrameTransfer,Off
ConfigGroup,Channel,Phase_15X,Spectra,White_Enable,0
ConfigGroup,Channel,Phase_15X,Spectra,White_Level,0
ConfigGroup,Channel,Phase_15X,DObjective,Label,15X
ConfigGroup,Channel,Phase_15X,DObjective,State,0
ConfigGroup,Channel,Phase_15X,Core,AutoShutter,1
ConfigGroup,Channel,Phase_15X,Core,Shutter,Arduino-Shutter

# Preset: Phase_10X_Live
ConfigGroup,Channel,Phase_10X_Live,Andor,Binning,1
ConfigGroup,Channel,Phase_10X_Live,Andor,Exposure,50.0000
ConfigGroup,Channel,Phase_10X_Live,Andor,Gain,4
ConfigGroup,Channel,Phase_10X_Live,Arduino-Switch,Blanking Mode,Off
ConfigGroup,Channel,Phase_10X_Live,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Phase_10X_Live,Spectra,State,0
ConfigGroup,Channel,Phase_10X_Live,TIFilterBlock1,Label,1------
ConfigGroup,Channel,Phase_10X_Live,Andor,FrameTransfer,On
ConfigGroup,Channel,Phase_10X_Live,Spectra,White_Enable,0
ConfigGroup,Channel,Phase_10X_Live,Spectra,White_Level,0
ConfigGroup,Channel,Phase_10X_Live,DObjective,Label,10X
ConfigGroup,Channel,Phase_10X_Live,DObjective,State,0
ConfigGroup,Channel,Phase_10X_Live,Core,AutoShutter,1
ConfigGroup,Channel,Phase_10X_Live,Core,Shutter,Arduino-Shutter

# Preset: Phase_UV_15X
ConfigGroup,Channel,Phase_UV_15X,Andor,Binning,1
ConfigGroup,Channel,Phase_UV_15X,Andor,Exposure,50.0000
ConfigGroup,Channel,Phase_UV_15X,Andor,FrameTransfer,Off
ConfigGroup,Channel,Phase_UV_15X,Andor,Gain,4
ConfigGroup,Channel,Phase_UV_15X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,Phase_UV_15X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Phase_UV_15X,DObjective,Label,15X
ConfigGroup,Channel,Phase_UV_15X,DObjective,State,0
ConfigGroup,Channel,Phase_UV_15X,Spectra,State,0
ConfigGroup,Channel,Phase_UV_15X,Spectra,White_Enable,0
ConfigGroup,Channel,Phase_UV_15X,Spectra,White_Level,0
ConfigGroup,Channel,Phase_UV_15X,TIFilterBlock1,Label,5-UV-1A-
ConfigGroup,Channel,Phase_UV_15X,Core,AutoShutter,1
ConfigGroup,Channel,Phase_UV_15X,Core,Shutter,Arduino-Shutter

# Preset: Phase_UV_10X_Live
ConfigGroup,Channel,Phase_UV_10X_Live,Andor,Binning,1
ConfigGroup,Channel,Phase_UV_10X_Live,Andor,Exposure,50.0000
ConfigGroup,Channel,Phase_UV_10X_Live,Andor,FrameTransfer,On
ConfigGroup,Channel,Phase_UV_10X_Live,Andor,Gain,4
ConfigGroup,Channel,Phase_UV_10X_Live,Arduino-Switch,Blanking Mode,Off
ConfigGroup,Channel,Phase_UV_10X_Live,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Phase_UV_10X_Live,DObjective,Label,10X
ConfigGroup,Channel,Phase_UV_10X_Live,DObjective,State,0
ConfigGroup,Channel,Phase_UV_10X_Live,Spectra,State,0
ConfigGroup,Channel,Phase_UV_10X_Live,Spectra,White_Enable,0
ConfigGroup,Channel,Phase_UV_10X_Live,Spectra,White_Level,0
ConfigGroup,Channel,Phase_UV_10X_Live,TIFilterBlock1,Label,5-UV-1A-
ConfigGroup,Channel,Phase_UV_10X_Live,Core,AutoShutter,1
ConfigGroup,Channel,Phase_UV_10X_Live,Core,Shutter,Arduino-Shutter

# Preset: UV_10X
ConfigGroup,Channel,UV_10X,Andor,Binning,1
ConfigGroup,Channel,UV_10X,Andor,Exposure,50.0000
ConfigGroup,Channel,UV_10X,Andor,FrameTransfer,Off
ConfigGroup,Channel,UV_10X,Andor,Gain,4
ConfigGroup,Channel,UV_10X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,UV_10X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,UV_10X,DObjective,Label,10X
ConfigGroup,Channel,UV_10X,DObjective,State,0
ConfigGroup,Channel,UV_10X,Spectra,State,0
ConfigGroup,Channel,UV_10X,Spectra,White_Enable,1
ConfigGroup,Channel,UV_10X,Spectra,White_Level,100
ConfigGroup,Channel,UV_10X,TIFilterBlock1,Label,5-UV-1A-
ConfigGroup,Channel,UV_10X,Core,AutoShutter,1
ConfigGroup,Channel,UV_10X,Core,Shutter,Spectra


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Andor,AD_Converter,1. 14bit
ConfigGroup,System,Startup,Andor,Advanced | Snap Image Additional Delay (ms),0
ConfigGroup,System,Startup,Andor,Advanced | Snap Image Timing Mode,Delay for Exposure
ConfigGroup,System,Startup,Andor,BaselineClamp,Enabled
ConfigGroup,System,Startup,Andor,Binning,1
ConfigGroup,System,Startup,Andor,CCDTemperatureSetPoint,-70
ConfigGroup,System,Startup,Andor,CoolerMode,Fan off at shutdown
ConfigGroup,System,Startup,Andor,EMSwitch,On
ConfigGroup,System,Startup,Andor,Exposure,10.0000
ConfigGroup,System,Startup,Andor,FanMode,Full
ConfigGroup,System,Startup,Andor,FrameTransfer,Off
ConfigGroup,System,Startup,Andor,Gain,4
ConfigGroup,System,Startup,Andor,Output_Amplifier,Electron Multiplying
ConfigGroup,System,Startup,Andor,PixelType,16bit
ConfigGroup,System,Startup,Andor,Pre-Amp-Gain,5.1x
ConfigGroup,System,Startup,Andor,ReadoutMode,10.000 MHz
ConfigGroup,System,Startup,Andor,Region of Interest,Full Image
ConfigGroup,System,Startup,Andor,Shutter,Auto
ConfigGroup,System,Startup,Andor,Shutter Closing Time,0
ConfigGroup,System,Startup,Andor,Shutter Opening Time,0
ConfigGroup,System,Startup,Andor,Shutter TTL Value,High to Open
ConfigGroup,System,Startup,Andor,SpuriousNoiseFilter,None
ConfigGroup,System,Startup,Andor,SpuriousNoiseFilterThreshold,0.0000
ConfigGroup,System,Startup,Andor,TimeOut,10000
ConfigGroup,System,Startup,Andor,TransposeCorrection,1
ConfigGroup,System,Startup,Andor,TransposeMirrorX,0
ConfigGroup,System,Startup,Andor,TransposeMirrorY,1
ConfigGroup,System,Startup,Andor,TransposeXY,0
ConfigGroup,System,Startup,Andor,Trigger,Internal
ConfigGroup,System,Startup,Andor,VerticalClockVoltage,Normal
ConfigGroup,System,Startup,Andor,VerticalSpeed,1.70
ConfigGroup,System,Startup,Arduino-Switch,Blank On,Low
ConfigGroup,System,Startup,Arduino-Switch,Blanking Mode,On
ConfigGroup,System,Startup,Arduino-Switch,HubID,Arduino-Hub
ConfigGroup,System,Startup,Arduino-Switch,Label,1
ConfigGroup,System,Startup,Arduino-Switch,Sequence,Off
ConfigGroup,System,Startup,Arduino-Switch,State,1
ConfigGroup,System,Startup,Arduino-Shutter,HubID,Arduino-Hub
ConfigGroup,System,Startup,Arduino-Shutter,OnOff,0
ConfigGroup,System,Startup,DObjective,Label,10X
ConfigGroup,System,Startup,Spectra,State,0
ConfigGroup,System,Startup,Spectra,White_Enable,1
ConfigGroup,System,Startup,Spectra,White_Level,100
ConfigGroup,System,Startup,ZStage,StepSizeUm,0.1000
ConfigGroup,System,Startup,TIFilterBlock1,Label,1------
ConfigGroup,System,Startup,XYStage,Acceleration,50
ConfigGroup,System,Startup,XYStage,MaxSpeed,50
ConfigGroup,System,Startup,XYStage,SCurve,50
ConfigGroup,System,Startup,Core,AutoShutter,1
ConfigGroup,System,Startup,Core,Camera,Andor
ConfigGroup,System,Startup,Core,Shutter,Arduino-Shutter
ConfigGroup,System,Startup,Core,TimeoutMs,5000
ConfigGroup,System,Startup,Core,XYStage,XYStage
ConfigGroup,System,Startup,SimpleAutofocus,Binning,0
ConfigGroup,System,Startup,SimpleAutofocus,CoarseStepSize,1.0000
ConfigGroup,System,Startup,SimpleAutofocus,CoarseSteps from center,5
ConfigGroup,System,Startup,SimpleAutofocus,CropFactor,0.2000
ConfigGroup,System,Startup,SimpleAutofocus,EnableAutoshutter,1
ConfigGroup,System,Startup,SimpleAutofocus,FineStepSize,0.3000
ConfigGroup,System,Startup,SimpleAutofocus,FineSteps from center,5
ConfigGroup,System,Startup,SimpleAutofocus,Re-acquire&EvaluateSharpness,0
ConfigGroup,System,Startup,SimpleAutofocus,SearchAlgorithm,Brent
ConfigGroup,System,Startup,SimpleAutofocus,Threshold,0.1000

# Preset: Shutdown
ConfigGroup,System,Shutdown,Andor,AD_Converter,1. 14bit
ConfigGroup,System,Shutdown,Andor,Advanced | Snap Image Additional Delay (ms),0
ConfigGroup,System,Shutdown,Andor,Advanced | Snap Image Timing Mode,Delay for Exposure
ConfigGroup,System,Shutdown,Andor,BaselineClamp,Enabled
ConfigGroup,System,Shutdown,Andor,Binning,1
ConfigGroup,System,Shutdown,Andor,CCDTemperatureSetPoint,20
ConfigGroup,System,Shutdown,Andor,CoolerMode,Fan off at shutdown
ConfigGroup,System,Shutdown,Andor,EMSwitch,On
ConfigGroup,System,Shutdown,Andor,Exposure,10.0000
ConfigGroup,System,Shutdown,Andor,FanMode,Full
ConfigGroup,System,Shutdown,Andor,FrameTransfer,Off
ConfigGroup,System,Shutdown,Andor,Gain,4
ConfigGroup,System,Shutdown,Andor,Isolated Crop Mode,Off
ConfigGroup,System,Shutdown,Andor,Output_Amplifier,Electron Multiplying
ConfigGroup,System,Shutdown,Andor,PixelType,16bit
ConfigGroup,System,Shutdown,Andor,Pre-Amp-Gain,5.1x
ConfigGroup,System,Shutdown,Andor,ReadoutMode,10.000 MHz
ConfigGroup,System,Shutdown,Andor,Region of Interest,Full Image
ConfigGroup,System,Shutdown,Andor,Shutter,Auto
ConfigGroup,System,Shutdown,Andor,Shutter Closing Time,20
ConfigGroup,System,Shutdown,Andor,Shutter Opening Time,20
ConfigGroup,System,Shutdown,Andor,Shutter TTL Value,High to Open
ConfigGroup,System,Shutdown,Andor,SpuriousNoiseFilter,None
ConfigGroup,System,Shutdown,Andor,SpuriousNoiseFilterThreshold,0.0000
ConfigGroup,System,Shutdown,Andor,TimeOut,10000
ConfigGroup,System,Shutdown,Andor,TransposeCorrection,1
ConfigGroup,System,Shutdown,Andor,TransposeMirrorX,0
ConfigGroup,System,Shutdown,Andor,TransposeMirrorY,1
ConfigGroup,System,Shutdown,Andor,TransposeXY,0
ConfigGroup,System,Shutdown,Andor,Trigger,Internal
ConfigGroup,System,Shutdown,Andor,VerticalClockVoltage,Normal
ConfigGroup,System,Shutdown,Andor,VerticalSpeed,1.70
ConfigGroup,System,Shutdown,Arduino-Switch,Blank On,Low
ConfigGroup,System,Shutdown,Arduino-Switch,Blanking Mode,On
ConfigGroup,System,Shutdown,Arduino-Switch,HubID,Arduino-Hub
ConfigGroup,System,Shutdown,Arduino-Switch,Label,1
ConfigGroup,System,Shutdown,Arduino-Switch,Sequence,Off
ConfigGroup,System,Shutdown,Arduino-Switch,State,1
ConfigGroup,System,Shutdown,Arduino-Shutter,HubID,Arduino-Hub
ConfigGroup,System,Shutdown,Arduino-Shutter,OnOff,0
ConfigGroup,System,Shutdown,DObjective,Label,10X
ConfigGroup,System,Shutdown,Spectra,State,0
ConfigGroup,System,Shutdown,Spectra,White_Enable,0
ConfigGroup,System,Shutdown,Spectra,White_Level,0
ConfigGroup,System,Shutdown,ZStage,StepSizeUm,0.1000
ConfigGroup,System,Shutdown,TIFilterBlock1,Label,1------
ConfigGroup,System,Shutdown,XYStage,Acceleration,50
ConfigGroup,System,Shutdown,XYStage,MaxSpeed,50
ConfigGroup,System,Shutdown,XYStage,SCurve,50
ConfigGroup,System,Shutdown,SimpleAutofocus,Binning,0
ConfigGroup,System,Shutdown,SimpleAutofocus,CoarseStepSize,1.0000
ConfigGroup,System,Shutdown,SimpleAutofocus,CoarseSteps from center,5
ConfigGroup,System,Shutdown,SimpleAutofocus,CropFactor,0.2000
ConfigGroup,System,Shutdown,SimpleAutofocus,EnableAutoshutter,1
ConfigGroup,System,Shutdown,SimpleAutofocus,FineStepSize,0.3000
ConfigGroup,System,Shutdown,SimpleAutofocus,FineSteps from center,5
ConfigGroup,System,Shutdown,SimpleAutofocus,Re-acquire&EvaluateSharpness,0
ConfigGroup,System,Shutdown,SimpleAutofocus,SearchAlgorithm,Brent
ConfigGroup,System,Shutdown,SimpleAutofocus,Threshold,0.1000
ConfigGroup,System,Shutdown,Core,AutoShutter,1
ConfigGroup,System,Shutdown,Core,Camera,Andor
ConfigGroup,System,Shutdown,Core,Shutter,Arduino-Shutter
ConfigGroup,System,Shutdown,Core,TimeoutMs,5000
ConfigGroup,System,Shutdown,Core,XYStage,XYStage



# PixelSize settings
# Resolution preset: Res15X
ConfigPixelSize,Res15X,DObjective,Label,15X
PixelSize_um,Res15X,0.8724
ConfigPixelSize,Res15X,DObjective,State,1
PixelSize_um,Res15X,0.8724

# Resolution preset: Res10X
ConfigPixelSize,Res10X,DObjective,Label,10X
PixelSize_um,Res10X,1.3064
ConfigPixelSize,Res10X,DObjective,State,0
PixelSize_um,Res10X,1.3064

# Resolution preset: Res100X
ConfigPixelSize,Res100X,DObjective,Label,100X
PixelSize_um,Res100X,0.1315
ConfigPixelSize,Res100X,DObjective,State,2
PixelSize_um,Res100X,0.1315

# Resolution preset: Res150X
ConfigPixelSize,Res150X,DObjective,Label,150X
PixelSize_um,Res150X,0.0878
ConfigPixelSize,Res150X,DObjective,State,3
PixelSize_um,Res150X,0.0878


