# Generated by Configurator on Wed Feb 26 15:59:50 EST 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM13,SerialManager,COM13
Device,COM14,SerialManager,COM14
Device,COM8,SerialManager,COM8
Device,TIScope,NikonTI,TIScope
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,XYStage,Prior,XYStage
Device,ZStage,Prior,ZStage
Device,SimpleAutofocus,SimpleAutoFocus,SimpleAutofocus
Device,DObjective,DemoCamera,DObjective
Device,Spectra,LumencorSpectra,Spectra

# Pre-init settings for devices
Property,COM13,AnswerTimeout,60000
Property,COM13,BaudRate,57600
Property,COM13,DelayBetweenCharsMs,0.0000
Property,COM13,Handshaking,Off
Property,COM13,Parity,None
Property,COM13,StopBits,1
Property,COM13,Verbose,0
Property,COM14,AnswerTimeout,60000
Property,COM14,BaudRate,9600
Property,COM14,DelayBetweenCharsMs,0.0000
Property,COM14,Handshaking,Off
Property,COM14,Parity,None
Property,COM14,StopBits,1
Property,COM14,Verbose,0
Property,COM8,AnswerTimeout,60000
Property,COM8,BaudRate,9600
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,0
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM13
Property,XYStage,Port,COM8
Property,ZStage,Port,COM8
Property,Spectra,Port,COM14
Property,Spectra,SetLE_Type,Sola

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIFilterBlock1,TIScope
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino-Shutter,Arduino-Hub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TIFilterBlock1,250.0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Arduino-Shutter
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TIFilterBlock1
Label,TIFilterBlock1,5,6-------6
Label,TIFilterBlock1,4,5-------5
Label,TIFilterBlock1,3,4-DAPI
Label,TIFilterBlock1,2,3-TxRed
Label,TIFilterBlock1,1,2-YFPHQ
Label,TIFilterBlock1,0,1-CFPHQ
# Arduino-Switch
Label,Arduino-Switch,63,63
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,12
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,8
Label,Arduino-Switch,7,7
Label,Arduino-Switch,6,6
Label,Arduino-Switch,5,5
Label,Arduino-Switch,4,4
Label,Arduino-Switch,3,3
Label,Arduino-Switch,2,2
Label,Arduino-Switch,1,1
Label,Arduino-Switch,0,0
# DObjective
Label,DObjective,5,empty5
Label,DObjective,4,empty4
Label,DObjective,3,150X
Label,DObjective,2,100X
Label,DObjective,1,15X
Label,DObjective,0,10X

# Configuration presets
# Group: Channel
# Preset: YFP_10X
ConfigGroup,Channel,YFP_10X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,YFP_10X,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,YFP_10X,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,YFP_10X,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,YFP_10X,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,YFP_10X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,YFP_10X,TIFilterBlock1,Label,2-YFPHQ
ConfigGroup,Channel,YFP_10X,XYStage,Acceleration,14
ConfigGroup,Channel,YFP_10X,XYStage,MaxSpeed,79
ConfigGroup,Channel,YFP_10X,XYStage,SCurve,50
ConfigGroup,Channel,YFP_10X,DObjective,Label,10X
ConfigGroup,Channel,YFP_10X,Core,AutoShutter,1
ConfigGroup,Channel,YFP_10X,Spectra,White_Level,100
ConfigGroup,Channel,YFP_10X,Spectra,White_Enable,1
ConfigGroup,Channel,YFP_10X,Spectra,State,1
ConfigGroup,Channel,YFP_10X,Core,Shutter,Spectra

# Preset: YFP_10X_2x2
ConfigGroup,Channel,YFP_10X_2x2,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,YFP_10X_2x2,HamamatsuHam_DCAM,Binning,2x2
ConfigGroup,Channel,YFP_10X_2x2,HamamatsuHam_DCAM,Exposure,300
ConfigGroup,Channel,YFP_10X_2x2,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,YFP_10X_2x2,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,YFP_10X_2x2,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,YFP_10X_2x2,TIFilterBlock1,Label,2-YFPHQ
ConfigGroup,Channel,YFP_10X_2x2,XYStage,Acceleration,14
ConfigGroup,Channel,YFP_10X_2x2,XYStage,MaxSpeed,79
ConfigGroup,Channel,YFP_10X_2x2,XYStage,SCurve,50
ConfigGroup,Channel,YFP_10X_2x2,DObjective,Label,10X
ConfigGroup,Channel,YFP_10X_2x2,Core,AutoShutter,1
ConfigGroup,Channel,YFP_10X_2x2,Spectra,White_Level,100
ConfigGroup,Channel,YFP_10X_2x2,Spectra,White_Enable,1
ConfigGroup,Channel,YFP_10X_2x2,Spectra,State,1
ConfigGroup,Channel,YFP_10X_2x2,Core,Shutter,Spectra

# Preset: YFP_10X_2x2_10uM
ConfigGroup,Channel,YFP_10X_2x2_10uM,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,YFP_10X_2x2_10uM,HamamatsuHam_DCAM,Binning,2x2
ConfigGroup,Channel,YFP_10X_2x2_10uM,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,YFP_10X_2x2_10uM,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,YFP_10X_2x2_10uM,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,YFP_10X_2x2_10uM,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,YFP_10X_2x2_10uM,TIFilterBlock1,Label,2-YFPHQ
ConfigGroup,Channel,YFP_10X_2x2_10uM,XYStage,Acceleration,14
ConfigGroup,Channel,YFP_10X_2x2_10uM,XYStage,MaxSpeed,79
ConfigGroup,Channel,YFP_10X_2x2_10uM,XYStage,SCurve,50
ConfigGroup,Channel,YFP_10X_2x2_10uM,DObjective,Label,10X
ConfigGroup,Channel,YFP_10X_2x2_10uM,Core,AutoShutter,1
ConfigGroup,Channel,YFP_10X_2x2_10uM,Spectra,White_Level,100
ConfigGroup,Channel,YFP_10X_2x2_10uM,Spectra,White_Enable,1
ConfigGroup,Channel,YFP_10X_2x2_10uM,Spectra,State,1
ConfigGroup,Channel,YFP_10X_2x2_10uM,Core,Shutter,Spectra

# Preset: YFP_10X_2x2_1uM
ConfigGroup,Channel,YFP_10X_2x2_1uM,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,YFP_10X_2x2_1uM,HamamatsuHam_DCAM,Binning,2x2
ConfigGroup,Channel,YFP_10X_2x2_1uM,HamamatsuHam_DCAM,Exposure,400
ConfigGroup,Channel,YFP_10X_2x2_1uM,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,YFP_10X_2x2_1uM,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,YFP_10X_2x2_1uM,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,YFP_10X_2x2_1uM,TIFilterBlock1,Label,2-YFPHQ
ConfigGroup,Channel,YFP_10X_2x2_1uM,XYStage,Acceleration,14
ConfigGroup,Channel,YFP_10X_2x2_1uM,XYStage,MaxSpeed,79
ConfigGroup,Channel,YFP_10X_2x2_1uM,XYStage,SCurve,50
ConfigGroup,Channel,YFP_10X_2x2_1uM,DObjective,Label,10X
ConfigGroup,Channel,YFP_10X_2x2_1uM,Core,AutoShutter,1
ConfigGroup,Channel,YFP_10X_2x2_1uM,Spectra,White_Level,100
ConfigGroup,Channel,YFP_10X_2x2_1uM,Spectra,White_Enable,1
ConfigGroup,Channel,YFP_10X_2x2_1uM,Spectra,State,1
ConfigGroup,Channel,YFP_10X_2x2_1uM,Core,Shutter,Spectra

# Preset: YFP_15X
ConfigGroup,Channel,YFP_15X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,YFP_15X,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,YFP_15X,HamamatsuHam_DCAM,Exposure,50
ConfigGroup,Channel,YFP_15X,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,YFP_15X,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,YFP_15X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,YFP_15X,TIFilterBlock1,Label,2-YFPHQ
ConfigGroup,Channel,YFP_15X,XYStage,Acceleration,14
ConfigGroup,Channel,YFP_15X,XYStage,MaxSpeed,79
ConfigGroup,Channel,YFP_15X,XYStage,SCurve,50
ConfigGroup,Channel,YFP_15X,DObjective,Label,100X
ConfigGroup,Channel,YFP_15X,Core,AutoShutter,1
ConfigGroup,Channel,YFP_15X,Spectra,White_Level,100
ConfigGroup,Channel,YFP_15X,Spectra,White_Enable,1
ConfigGroup,Channel,YFP_15X,Spectra,State,1
ConfigGroup,Channel,YFP_15X,Core,Shutter,Spectra

# Preset: CFP_100X
ConfigGroup,Channel,CFP_100X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,CFP_100X,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,CFP_100X,HamamatsuHam_DCAM,Exposure,1000
ConfigGroup,Channel,CFP_100X,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,CFP_100X,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,CFP_100X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,CFP_100X,TIFilterBlock1,Label,1-CFPHQ
ConfigGroup,Channel,CFP_100X,XYStage,Acceleration,14
ConfigGroup,Channel,CFP_100X,XYStage,MaxSpeed,79
ConfigGroup,Channel,CFP_100X,XYStage,SCurve,50
ConfigGroup,Channel,CFP_100X,DObjective,Label,100X
ConfigGroup,Channel,CFP_100X,Core,AutoShutter,1
ConfigGroup,Channel,CFP_100X,Spectra,White_Level,100
ConfigGroup,Channel,CFP_100X,Spectra,White_Enable,1
ConfigGroup,Channel,CFP_100X,Spectra,State,1
ConfigGroup,Channel,CFP_100X,Core,Shutter,Spectra

# Preset: DAPI_100X
ConfigGroup,Channel,DAPI_100X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,DAPI_100X,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,DAPI_100X,HamamatsuHam_DCAM,Exposure,999.0568
ConfigGroup,Channel,DAPI_100X,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,DAPI_100X,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,DAPI_100X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,DAPI_100X,TIFilterBlock1,Label,4-DAPI
ConfigGroup,Channel,DAPI_100X,XYStage,Acceleration,14
ConfigGroup,Channel,DAPI_100X,XYStage,MaxSpeed,79
ConfigGroup,Channel,DAPI_100X,XYStage,SCurve,50
ConfigGroup,Channel,DAPI_100X,DObjective,Label,100X
ConfigGroup,Channel,DAPI_100X,Core,AutoShutter,1
ConfigGroup,Channel,DAPI_100X,Spectra,White_Level,100
ConfigGroup,Channel,DAPI_100X,Spectra,White_Enable,1
ConfigGroup,Channel,DAPI_100X,Spectra,State,1
ConfigGroup,Channel,DAPI_100X,Core,Shutter,Spectra

# Preset: Phase_10X
ConfigGroup,Channel,Phase_10X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Phase_10X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,Phase_10X,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,Phase_10X,HamamatsuHam_DCAM,Exposure,60.9997
ConfigGroup,Channel,Phase_10X,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,Phase_10X,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,Phase_10X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,Phase_10X,TIFilterBlock1,Label,5-------5
ConfigGroup,Channel,Phase_10X,XYStage,Acceleration,14
ConfigGroup,Channel,Phase_10X,XYStage,MaxSpeed,79
ConfigGroup,Channel,Phase_10X,XYStage,SCurve,50
ConfigGroup,Channel,Phase_10X,DObjective,Label,10X
ConfigGroup,Channel,Phase_10X,Core,AutoShutter,1
ConfigGroup,Channel,Phase_10X,Spectra,State,0
ConfigGroup,Channel,Phase_10X,Core,Shutter,Arduino-Shutter

# Preset: Fast_Phase_10X
ConfigGroup,Channel,Fast_Phase_10X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Fast_Phase_10X,Arduino-Switch,Blanking Mode,Off
ConfigGroup,Channel,Fast_Phase_10X,HamamatsuHam_DCAM,Binning,2x2
ConfigGroup,Channel,Fast_Phase_10X,HamamatsuHam_DCAM,Exposure,10.0075
ConfigGroup,Channel,Fast_Phase_10X,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,Fast_Phase_10X,HamamatsuHam_DCAM,ScanMode,2
ConfigGroup,Channel,Fast_Phase_10X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,Fast_Phase_10X,TIFilterBlock1,Label,5-------5
ConfigGroup,Channel,Fast_Phase_10X,XYStage,Acceleration,14
ConfigGroup,Channel,Fast_Phase_10X,XYStage,MaxSpeed,79
ConfigGroup,Channel,Fast_Phase_10X,XYStage,SCurve,50
ConfigGroup,Channel,Fast_Phase_10X,DObjective,Label,10X
ConfigGroup,Channel,Fast_Phase_10X,Core,AutoShutter,1
ConfigGroup,Channel,Fast_Phase_10X,Spectra,State,0
ConfigGroup,Channel,Fast_Phase_10X,Core,Shutter,Arduino-Shutter

# Preset: YFP_100X
ConfigGroup,Channel,YFP_100X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,YFP_100X,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,YFP_100X,HamamatsuHam_DCAM,Exposure,2000
ConfigGroup,Channel,YFP_100X,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,YFP_100X,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,YFP_100X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,YFP_100X,TIFilterBlock1,Label,2-YFPHQ
ConfigGroup,Channel,YFP_100X,XYStage,Acceleration,14
ConfigGroup,Channel,YFP_100X,XYStage,MaxSpeed,79
ConfigGroup,Channel,YFP_100X,XYStage,SCurve,50
ConfigGroup,Channel,YFP_100X,DObjective,Label,100X
ConfigGroup,Channel,YFP_100X,Core,AutoShutter,1
ConfigGroup,Channel,YFP_100X,Spectra,White_Level,100
ConfigGroup,Channel,YFP_100X,Spectra,White_Enable,1
ConfigGroup,Channel,YFP_100X,Spectra,State,1
ConfigGroup,Channel,YFP_100X,Core,Shutter,Spectra

# Preset: RFP_100X
ConfigGroup,Channel,RFP_100X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,RFP_100X,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,RFP_100X,HamamatsuHam_DCAM,Exposure,1000
ConfigGroup,Channel,RFP_100X,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,RFP_100X,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,RFP_100X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,RFP_100X,TIFilterBlock1,Label,3-TxRed
ConfigGroup,Channel,RFP_100X,XYStage,Acceleration,14
ConfigGroup,Channel,RFP_100X,XYStage,MaxSpeed,79
ConfigGroup,Channel,RFP_100X,XYStage,SCurve,50
ConfigGroup,Channel,RFP_100X,DObjective,Label,100X
ConfigGroup,Channel,RFP_100X,Core,AutoShutter,1
ConfigGroup,Channel,RFP_100X,Spectra,White_Level,100
ConfigGroup,Channel,RFP_100X,Spectra,White_Enable,1
ConfigGroup,Channel,RFP_100X,Spectra,State,1
ConfigGroup,Channel,RFP_100X,Core,Shutter,Spectra

# Preset: Phase_100X
ConfigGroup,Channel,Phase_100X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Phase_100X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,Phase_100X,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,Phase_100X,HamamatsuHam_DCAM,Exposure,60
ConfigGroup,Channel,Phase_100X,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,Phase_100X,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,Phase_100X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,Phase_100X,TIFilterBlock1,Label,5-------5
ConfigGroup,Channel,Phase_100X,XYStage,Acceleration,14
ConfigGroup,Channel,Phase_100X,XYStage,MaxSpeed,79
ConfigGroup,Channel,Phase_100X,XYStage,SCurve,50
ConfigGroup,Channel,Phase_100X,DObjective,Label,100X
ConfigGroup,Channel,Phase_100X,Core,AutoShutter,1
ConfigGroup,Channel,Phase_100X,Spectra,State,0
ConfigGroup,Channel,Phase_100X,Core,Shutter,Arduino-Shutter

# Preset: Phase_15X
ConfigGroup,Channel,Phase_15X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Phase_15X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,Phase_15X,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,Phase_15X,HamamatsuHam_DCAM,Exposure,60.9997
ConfigGroup,Channel,Phase_15X,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,Phase_15X,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,Phase_15X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,Phase_15X,TIFilterBlock1,Label,5-------5
ConfigGroup,Channel,Phase_15X,XYStage,Acceleration,14
ConfigGroup,Channel,Phase_15X,XYStage,MaxSpeed,79
ConfigGroup,Channel,Phase_15X,XYStage,SCurve,50
ConfigGroup,Channel,Phase_15X,DObjective,Label,15X
ConfigGroup,Channel,Phase_15X,Core,AutoShutter,1
ConfigGroup,Channel,Phase_15X,Spectra,State,0
ConfigGroup,Channel,Phase_15X,Core,Shutter,Arduino-Shutter

# Preset: Phase_DAPI_10X
ConfigGroup,Channel,Phase_DAPI_10X,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Phase_DAPI_10X,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,Phase_DAPI_10X,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,Phase_DAPI_10X,HamamatsuHam_DCAM,Exposure,130
ConfigGroup,Channel,Phase_DAPI_10X,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,Phase_DAPI_10X,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,Phase_DAPI_10X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,Phase_DAPI_10X,TIFilterBlock1,Label,4-DAPI
ConfigGroup,Channel,Phase_DAPI_10X,XYStage,Acceleration,14
ConfigGroup,Channel,Phase_DAPI_10X,XYStage,MaxSpeed,79
ConfigGroup,Channel,Phase_DAPI_10X,XYStage,SCurve,50
ConfigGroup,Channel,Phase_DAPI_10X,DObjective,Label,10X
ConfigGroup,Channel,Phase_DAPI_10X,Core,AutoShutter,1
ConfigGroup,Channel,Phase_DAPI_10X,Spectra,State,0
ConfigGroup,Channel,Phase_DAPI_10X,Core,Shutter,Arduino-Shutter

# Preset: Phase_10X_2x2
ConfigGroup,Channel,Phase_10X_2x2,TIFilterBlock1,Label,5-------5
ConfigGroup,Channel,Phase_10X_2x2,Arduino-Switch,Blanking Mode,On
ConfigGroup,Channel,Phase_10X_2x2,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Phase_10X_2x2,HamamatsuHam_DCAM,Binning,2x2
ConfigGroup,Channel,Phase_10X_2x2,HamamatsuHam_DCAM,Exposure,50
ConfigGroup,Channel,Phase_10X_2x2,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,Phase_10X_2x2,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,Phase_10X_2x2,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,Channel,Phase_10X_2x2,XYStage,Acceleration,14
ConfigGroup,Channel,Phase_10X_2x2,XYStage,MaxSpeed,79
ConfigGroup,Channel,Phase_10X_2x2,XYStage,SCurve,50
ConfigGroup,Channel,Phase_10X_2x2,DObjective,Label,10X
ConfigGroup,Channel,Phase_10X_2x2,Spectra,State,0
ConfigGroup,Channel,Phase_10X_2x2,Spectra,White_Enable,0
ConfigGroup,Channel,Phase_10X_2x2,Spectra,White_Level,100
ConfigGroup,Channel,Phase_10X_2x2,Core,AutoShutter,1
ConfigGroup,Channel,Phase_10X_2x2,Core,Shutter,Arduino-Shutter


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,TIFilterBlock1,State,4
ConfigGroup,System,Startup,Arduino-Switch,Blank On,Low
ConfigGroup,System,Startup,Arduino-Switch,Blanking Mode,On
ConfigGroup,System,Startup,Arduino-Switch,HubID,Arduino-Hub
ConfigGroup,System,Startup,Arduino-Switch,Label,1
ConfigGroup,System,Startup,Arduino-Switch,Sequence,Off
ConfigGroup,System,Startup,Arduino-Switch,State,1
ConfigGroup,System,Startup,Arduino-Shutter,HubID,Arduino-Hub
ConfigGroup,System,Startup,Arduino-Shutter,OnOff,0
ConfigGroup,System,Startup,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,System,Startup,HamamatsuHam_DCAM,EXPOSURE FULL RANGE,ENABLE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,Exposure,60
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[0],0.0000
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[1],0.0000
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[2],0.0000
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],EXPOSURE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD[0],0.0010
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD[1],0.0010
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD[2],0.0010
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,PixelType,16bit
ConfigGroup,System,Startup,HamamatsuHam_DCAM,READOUT DIRECTION,FORWARD
ConfigGroup,System,Startup,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,System,Startup,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER ACTIVE,EDGE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER DELAY,0.0000
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER TIMES,1
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TransposeCorrection,0
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TransposeMirrorX,0
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TransposeMirrorY,0
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TransposeXY,0
ConfigGroup,System,Startup,HamamatsuHam_DCAM,Trigger,NORMAL
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TriggerPolarity,NEGATIVE
ConfigGroup,System,Startup,XYStage,Acceleration,14
ConfigGroup,System,Startup,XYStage,MaxSpeed,79
ConfigGroup,System,Startup,XYStage,SCurve,50
ConfigGroup,System,Startup,XYStage,TransposeMirrorX,0
ConfigGroup,System,Startup,XYStage,TransposeMirrorY,0
ConfigGroup,System,Startup,ZStage,Acceleration,35
ConfigGroup,System,Startup,ZStage,MaxSpeed,20
ConfigGroup,System,Startup,ZStage,SCurve,50
ConfigGroup,System,Startup,SimpleAutofocus,Binning,0
ConfigGroup,System,Startup,SimpleAutofocus,CoarseStepSize,1.0000
ConfigGroup,System,Startup,SimpleAutofocus,CoarseSteps from center,5
ConfigGroup,System,Startup,SimpleAutofocus,CropFactor,0.2000
ConfigGroup,System,Startup,SimpleAutofocus,EnableAutoshutter,1
ConfigGroup,System,Startup,SimpleAutofocus,FineStepSize,0.3000
ConfigGroup,System,Startup,SimpleAutofocus,FineSteps from center,5
ConfigGroup,System,Startup,SimpleAutofocus,Re-acquire&EvaluateSharpness,0
ConfigGroup,System,Startup,SimpleAutofocus,SearchAlgorithm,Brent
ConfigGroup,System,Startup,SimpleAutofocus,Threshold,0.1000
ConfigGroup,System,Startup,DObjective,State,0
ConfigGroup,System,Startup,Spectra,State,0
ConfigGroup,System,Startup,Spectra,White_Enable,1
ConfigGroup,System,Startup,Spectra,White_Level,100
ConfigGroup,System,Startup,Core,AutoFocus,SimpleAutofocus
ConfigGroup,System,Startup,Core,AutoShutter,1
ConfigGroup,System,Startup,Core,Camera,HamamatsuHam_DCAM
ConfigGroup,System,Startup,Core,ChannelGroup,Channel
ConfigGroup,System,Startup,Core,Focus,ZStage
ConfigGroup,System,Startup,Core,Shutter,Arduino-Shutter
ConfigGroup,System,Startup,Core,TimeoutMs,60000
ConfigGroup,System,Startup,Core,XYStage,XYStage

# Preset: Shutdown
ConfigGroup,System,Shutdown,TIFilterBlock1,State,4
ConfigGroup,System,Shutdown,Arduino-Switch,Blank On,Low
ConfigGroup,System,Shutdown,Arduino-Switch,Blanking Mode,On
ConfigGroup,System,Shutdown,Arduino-Switch,HubID,Arduino-Hub
ConfigGroup,System,Shutdown,Arduino-Switch,Label,1
ConfigGroup,System,Shutdown,Arduino-Switch,Sequence,Off
ConfigGroup,System,Shutdown,Arduino-Switch,State,1
ConfigGroup,System,Shutdown,Arduino-Shutter,HubID,Arduino-Hub
ConfigGroup,System,Shutdown,Arduino-Shutter,OnOff,0
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,EXPOSURE FULL RANGE,ENABLE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,Exposure,60
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[0],0.0000
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[1],0.0000
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[2],0.0000
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],EXPOSURE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD[0],0.0010
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD[1],0.0010
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD[2],0.0010
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,PixelType,16bit
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,READOUT DIRECTION,FORWARD
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TRIGGER ACTIVE,EDGE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TRIGGER DELAY,0.0000
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TRIGGER TIMES,1
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TransposeCorrection,0
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TransposeMirrorX,0
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TransposeMirrorY,0
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TransposeXY,0
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,Trigger,NORMAL
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TriggerPolarity,NEGATIVE
ConfigGroup,System,Shutdown,XYStage,Acceleration,14
ConfigGroup,System,Shutdown,XYStage,MaxSpeed,79
ConfigGroup,System,Shutdown,XYStage,SCurve,50
ConfigGroup,System,Shutdown,XYStage,TransposeMirrorX,0
ConfigGroup,System,Shutdown,XYStage,TransposeMirrorY,0
ConfigGroup,System,Shutdown,ZStage,Acceleration,35
ConfigGroup,System,Shutdown,ZStage,MaxSpeed,20
ConfigGroup,System,Shutdown,ZStage,SCurve,50
ConfigGroup,System,Shutdown,SimpleAutofocus,Binning,0
ConfigGroup,System,Shutdown,SimpleAutofocus,CoarseStepSize,1.0000
ConfigGroup,System,Shutdown,SimpleAutofocus,CoarseSteps from center,5
ConfigGroup,System,Shutdown,SimpleAutofocus,CropFactor,0.2000
ConfigGroup,System,Shutdown,SimpleAutofocus,EnableAutoshutter,1
ConfigGroup,System,Shutdown,SimpleAutofocus,FineStepSize,0.3000
ConfigGroup,System,Shutdown,SimpleAutofocus,FineSteps from center,5
ConfigGroup,System,Shutdown,SimpleAutofocus,Re-acquire&EvaluateSharpness,0
ConfigGroup,System,Shutdown,SimpleAutofocus,SearchAlgorithm,Brent
ConfigGroup,System,Shutdown,SimpleAutofocus,Threshold,0.1000
ConfigGroup,System,Shutdown,DObjective,State,0
ConfigGroup,System,Shutdown,Spectra,State,0
ConfigGroup,System,Shutdown,Spectra,White_Enable,0
ConfigGroup,System,Shutdown,Spectra,White_Level,0
ConfigGroup,System,Shutdown,Core,AutoFocus,SimpleAutofocus
ConfigGroup,System,Shutdown,Core,AutoShutter,1
ConfigGroup,System,Shutdown,Core,Camera,HamamatsuHam_DCAM
ConfigGroup,System,Shutdown,Core,ChannelGroup,Channel
ConfigGroup,System,Shutdown,Core,Focus,ZStage
ConfigGroup,System,Shutdown,Core,Shutter,Arduino-Shutter
ConfigGroup,System,Shutdown,Core,TimeoutMs,60000
ConfigGroup,System,Shutdown,Core,XYStage,XYStage


# Group: Filter_Block
# Preset: 4-DAPI
ConfigGroup,Filter_Block,4-DAPI,TIFilterBlock1,Label,4-DAPI

# Preset: 3-TxRed
ConfigGroup,Filter_Block,3-TxRed,TIFilterBlock1,Label,3-TxRed

# Preset: 1-CFPHQ
ConfigGroup,Filter_Block,1-CFPHQ,TIFilterBlock1,Label,1-CFPHQ

# Preset: 6-------6
ConfigGroup,Filter_Block,6-------6,TIFilterBlock1,Label,6-------6

# Preset: 2-YFPHQ
ConfigGroup,Filter_Block,2-YFPHQ,TIFilterBlock1,Label,2-YFPHQ

# Preset: 5-------5
ConfigGroup,Filter_Block,5-------5,TIFilterBlock1,Label,5-------5



# PixelSize settings
# Resolution preset: Res15X
ConfigPixelSize,Res15X,DObjective,Label,15X
PixelSize_um,Res15X,0.4354
ConfigPixelSize,Res15X,DObjective,State,1
PixelSize_um,Res15X,0.4354

# Resolution preset: Res10X
ConfigPixelSize,Res10X,DObjective,Label,10X
PixelSize_um,Res10X,0.6539
ConfigPixelSize,Res10X,DObjective,State,0
PixelSize_um,Res10X,0.6539

# Resolution preset: Res100X
ConfigPixelSize,Res100X,DObjective,Label,100X
PixelSize_um,Res100X,0.0654
ConfigPixelSize,Res100X,DObjective,State,2
PixelSize_um,Res100X,0.0654

# Resolution preset: Res150X
ConfigPixelSize,Res150X,DObjective,Label,150X
PixelSize_um,Res150X,0.0435
ConfigPixelSize,Res150X,DObjective,State,3
PixelSize_um,Res150X,0.0435


